config:
  title: Genome_Center_Rna_Seq
  description: Goes through the Genome Center's standard RNA-Seq workflow
  copyright: My Organization
  version: 0.0.1
  authors: [{name: Cannon Mallory, affiliation: UW}]
  maintainer: {name: Cannon Mallory, email: malloc3@uw.edu}
  acknowledgements: [{name: Amy Cash, affiliation: UW}]
  github: {user: malloc3, repo: genome_center_na_seq}
  aquadoc_version: 1.0.2
  aquarium_version: <%= Bioturk::Application.config.aquarium_version %>
library: {name: CollectionActions, category: Collection_Management}
code_source:
#Cannon Mallory
#malloc3@uw.edu
#
#This module is to contain commen actions done with collections
#This includes moving them, finding locations, putting away individual collections.
# or putting a whole collection on a machine etc
#These actions should involve the WHOLE plate not individual wells.  The colleciton is doing the whole action
module CollectionActions
    
    #stores all input collections from all operations
    #
    # @operations OperationsList the operation list that all input collections should be stored
    # @location Optional String, the location that the items are to be moved to
    def store_input_collections(operations, location = nil)
        show do 
           title "Put Away the Following Items"
           operations.each do |op|
              array_of_input_fv = op.inputs.reject{|fv| fv.collection == nil}
              table table_of_object_locations(array_of_input_fv, location)
          end
        end
    end
    
    #stores all output collections from all operations
    #
    # @operations OperationsList the operation list that all output collections should be stored
    def store_output_collections(operations, location = nil)
        show do 
           title "Put Away the Following Items"
           array_of_input_fv = []
           operations.each do |op|
            array_of_input_fv = array_of_input_fv + op.outputs.reject{|fv| fv.collection == nil}
           end
           table table_of_object_locations(array_of_input_fv, location)
        end
    end
    
    #Shows the locations of all the collections in the array of FV.
    #Can move the location to optional "location"
    #
    # array_of_fv Array[FieldValues] an array of FieldValues
    # @location string Optional moves all collections to that location
    # Returns
    # @Table    Table   Returns a Table
    def table_of_object_locations(array_of_fv, location = nil)
        obj_array = []
        array_of_fv.each do |fv|
            if fv.collection != nil
                obj_array.push fv.collection
            elsif fv.item != nil
                obj_array.push fv.item
            else
                raise "Invalid class.  Neither collection nor item."
            end
        end
        obj_array = obj_array.uniq
        set_locations(obj_array, location) if location != nil
        return get_item_locations(obj_array)
    end


    #Sets the location of all objects in array to some given locations
    #
    # @obj_array  Array[Collection] or Array[Items] an array of any objects that extend class item
    # @location     String the location to be moved to (just string or Wizard if Wizard Exist)
    def set_locations(obj_array, location)
        obj_array.each do |obj|
            obj.move(location)
        end
    end
    
    #instructions to store a specific collection
    #
    # @collection Collection the collection that is to be put away
    # Returns:
    # @ Table of collections and their locations
    def get_item_locations(obj_array)
        tab = [['ID', 'Collection Type', 'Location']]
        obj_array.each do |obj|
            tab.push([obj.id, obj.object_type.name, obj.location])
        end
        return tab
    end
    
    #Instructions to store a specific item
    #
    # @obj_item Item/Object that extends class item or Array[Item/item that 
    #       extends class item]         all items that need to be stored
    # @location Optional String Sets the location of the items if included
    def store_items(obj_item, location = nil)
        show do
            title "Put Away the Following Items"
            if obj_item.class != Array
                set_locations([obj_item], location) if location != nil
                table get_item_locations([obj_item])
            else
                set_locations(obj_item, location) if location != nil
                table get_item_location(obj_item)
            end
        end
    end

    #Gives directions to throwaway an object (collection or item)
    #
    # @obj or array of Item or Object that extends class Item  eg collection
    # @hazardous boolean if hazardous then true
    def trash_object(obj_array, hazardous = true)
        #toss QC plate
        if obj_array.class != Array
            obj_array = [obj_array]
        end
        
        show do
            title "Trash the following items"
            tab = [['Item', 'Waste Container']]
            obj_array.each do |obj|
                obj.mark_as_deleted
                if hazardous
                    waste_container = "Biohazard Waste"
                else
                    waste_container = "Trash Can"
                end
                tab.push([obj.id, waste_container])
            end
            table tab
        end
    end

    #makes a new plate and provides instructions to label said plate
    #
    # @ c_type string the collection type
    # @ label_plate boolean weather to get and label plate or no default true
    # Returns
    # @collection collection the collection it makes
    def make_new_plate(c_type, label_plate = true)
        working_plate = Collection.new_collection(c_type)
        get_and_label_new_plate(working_plate) if label_plate
        return working_plate
    end



    #Instructions on getting and labeling new plate
    #
    #@plate Collection plate to be gotten and labeled
    def get_and_label_new_plate(plate)
        show do
        title "Get and Label Working Plate"
        note "Get a <b>#{plate.object_type.name}</b> and lable ID: <b>#{plate.id}</b>"
        end
    end
    
    
end

library: {name: CollectionDisplay, category: Collection_Management}
code_source:
#Justin Vrana
#
#modified by:
#Cannon Mallory
#malloc3@uw.edu
#
#Modifications include:
# Documentation (yet to happen)
#
# This module is for displaying information about collections in effecient easy to use ways
#
# TODO Make the collection displays so that they wont always be checkable cause that gets annoying
module CollectionDisplay
  def create_collection_table(collection)
    size = collection.object_type.rows * collection.object_type.columns
    slots = (1..size).to_a
    slots.each_slice(collection.object_type.columns).map do |row|
      row.map do |col|
        {content: col, class: 'td-empty-slot'}
      end
    end
  end

  def highlight(tbl, row, col, id, check: true)
    tbl[row][col] = {content: id, class: 'td-filled-slot', check: check}
  end

  # [r,c,x] list
  def highlight_rcx(collection, rcx_list, check: true)
    tbl = create_collection_table collection
    rcx_list.each do |r, c, x|
      highlight(tbl, r, c, x, check: check)
    end
    tbl
  end

  def highlight_rc(collection, rc_list,  check: true, &rc_block)
    rcx_list = rc_list.map { |r, c|
      block_given? ? [r, c, yield(r, c)] : [r, c, ""]
    }
    highlight_rcx(collection, rcx_list, check: check)
  end

  def highlight_non_empty(collection, check: true, &rc_block)
    highlight_rc(collection, collection.get_non_empty, check: check, &rc_block)
  end

  def highlight_collection(ops, id_block=nil, check: true, &fv_block)
    g = ops.group_by { |op| fv_block.call(op).collection }
    tables = g.map do |collection, grouped_ops|
      rcx_list = grouped_ops.map do |op|
        fv = fv_block.call(op)
        id = id_block.call(op) if id_block
        id ||= fv.sample.id
        [fv.row, fv.column, id]
      end
      tbl = highlight_rcx(collection, rcx_list, check: check)
      [collection, tbl]
    end
    tables
  end

  def r_c_to_slot collection, r, c
    rows, cols = collection.dimensions = collection.object_type.rows
    r*cols + c+1
  end
  
  
  
  
  def create_alpha_numeric_table(collection)
    size = collection.object_type.rows * collection.object_type.columns
    slots = (1..size).to_a
    alpha_r = ('A'..'H').to_a
    slots.each_slice(collection.object_type.columns).each_with_index.map do |row, r_idx|
      row.each_with_index.map do |col, c_idx|
        {content: "#{alpha_r[r_idx]}#{c_idx + 1}", class: 'td-empty-slot'}
      end
    end
  end
  
  def highlight_alpha_rc(collection, rc_list, check: true, &rc_block)
    rcx_list = rc_list.map { |r, c|
      block_given? ? [r, c, yield(r, c)] : [r, c, ""]
    }
    highlight_alpha_rcx(collection, rcx_list, check: check)
  end
  
  def highlight_alpha_rcx(collection, rcx_list, check: true)
     tbl = create_alpha_numeric_table(collection)
     rcx_list.each do |r, c, x|
         highlight(tbl, r, c, x, check: check)
     end
     return tbl
  end

  def highlight_alpha_non_empty(collection, check: true, &rc_block)
    highlight_alpha_rc(collection, collection.get_non_empty, check: check, &rc_block)
  end
      
end

library: {name: CollectionTransfer, category: Collection_Management}
code_source:
#Cannon Mallory
#malloc3@uw.edu
#
# This module includes helfpul methods for transferring items into and out of collections
# Currently it only has collection --> collection transfers 
#TODO Item --> collection and collection --> item transfers. (not applicable for current project so not added)
needs "Standard Libs/Units"

module CollectionTransfer
  
  include Units


  #Provides instructions to transfer sample from an input_collection to a working_working collection
  #The array of samples must exist in both collections.  Both collections must already have the samples
  #associated with it else an error will be thrown.
  #
  # @input_collection Collection  the collection that samples will be transfered from
  # @working_collection Collection the collection that samples will be transfered to
  # @transfer_vol Int volume in ul of sample to transfer
  #
  # @arry_samples  Array[Sample] Optional an array of all the samples that are to be transfered
        #if black then all samples will be transfered
  def transfer_to_working_plate(input_collection, working_collection, arry_sample = nil, transfer_vol)
    if arry_sample == nil
      arry_sample = input_collection.parts.map{|part| part.sample if part.class != "Sample"}
    end
    input_rcx = []
    output_rcx = []
    arry_sample.each do |sample|
      input_location_array = get_item_sample_location(input_collection, sample)
      input_sample_location = get_alpha_num_location(input_collection, sample)

      output_location_array = get_item_sample_location(working_collection, sample)
      output_sample_location = get_alpha_num_location(input_collection, sample)

      input_location_array.each do |sub_array|
        sub_array.push(input_sample_location)
        input_rcx.push(sub_array)
      end

      output_location_array.each do |sub_array|
          sub_array.push(output_sample_location)
          output_rcx.push(sub_array)
      end
    end

    associate_plate_to_plate(working_collection, input_collection, "Input Plate", "Input Item")

    show do 
      title "Transfer from Stock Plate to Working Plate"
      note "Please transfer #{transfer_vol} #{MICROLITERS} from stock plate (ID:#{input_collection.id}) to working 
                                plate (ID:#{working_collection.id}) per tables below"
      note "Separator"
      note "Stock Plate (ID: #{input_collection.id}):"
      table highlight_rcx(input_collection, input_rcx, check: false)
      note "Working Plate (ID: #{working_collection}):"
      table highlight_rcx(working_collection, output_rcx, check: false)
    end
  end


  #Instructions to transfer from input plates to working_plates when an array of samples in collections is used
  #Will group samples in same collection together for easier transfer.  Uses transfer_to_working_plate method
  #
  # @working_plate Collection (Should have samples already associated to it)
  # @input_fv_array Array[FieldValues] an array of field values of collections.  Typically from
        # op.input_array(INPUT_ARRAY_NAME) when the individual inputs are samples in a collection
  # @transfer_vol Int volume in ul of sample to transfer
  def transfer_from_array_collections(input_fv_array, working_plate, transfer_vol)
    sample_arry_by_collection = input_fv_array.group_by{|fv| fv.collection}
    sample_arry_by_collection.each do |input_collection, fv_array|
      sample_array = fv_array.map{|fv| fv.sample}
      transfer_to_working_plate(input_collection, working_plate, sample_array, transfer_vol)
    end
  end


  #Instructions on relabeling plates to new plate ID
  #
  #@plate1 Collection plate to be relabel
  #@plate2 Collection new plate label
  def relabel_plate(plate1, plate2)
    show do
      title "Rename Plate"
      note "Relabel plate #{plate1.id} with #{plate2.id}"
    end
  end


  #determins if there are multiple output plate
  #
  #@operations OperationList list of operations in job
  #returns boolean true if multiple plates 
  def multi_input_plates?(operations)
    if get_num_plates(operations, 'input') > 1
      return true
    else
      return false 
    end
  end

  #determins if there are multiple output plate
  #
  #@operations OperationList list of operations in job
  #returns boolean true if multiple plates 
  def multi_output_plates?(operations)
    if get_num_plates(operations, 'output') > 1
      return true
    else
      return false 
    end
  end

  #gets the number of plate
  #
  #@operations OperationList list of operations in job
  #@in_out String input or output determines if its input or output collections
  #returns Int the number of plates 
  def get_num_plates(operations, in_out)
    return get_array_of_collections(operations, in_out).length
  end

  #gets the number of plate
  #
  #@operations OperationList list of operations in job
  #@in_out String input or output determines if its input or output collections
  #returns Array[collection] the number of plates 
  def get_array_of_collections(operations, in_out)
    collection_array = []
    operations.each do |op|
      obj_array = op.inputs if in_out = "input"
      obj_array = op.outputs if in_out = "output"
      obj_array.each do |fv|
        if fv.collection != nil
          collection_array.push(fv.collection)
        end
      end
    end
    return collection_array.uniq
  end


  #associates all items in the added_plate to the items in the base plate
  # Associates corrosponding well locations.  Assocaites plate to plate and well to well
  # Only associates to wells that have a part in them
  #
  #@base_plate collcetion the plate that is getting the association
  #@added_plate collection the plate that is transfering the association
  def associate_plate_to_plate(base_plate, added_plate, plate_key, item_key)
    base_plate.associate(plate_key, added_plate)
    added_parts = added_plate.parts
    base_parts = base_plate.parts
    base_parts.each_with_index do |part, idx|
      part.associate(item_key, added_parts[idx])
    end
  end
end

library: {name: SampleManagement, category: Collection_Management}
code_source:
#Cannon Mallory
#malloc3@uw.edu
#
#This is to facilitate sample management within collection
module SampleManagement

  ALPHA26 = ("A"..."Z").to_a


  #Returns an location array [r,c] for the location given in alpha_loc form
  #
  #@alpha_loc string of form A1, B1, B2 etc
  #returns
  #@loc_array array[int, int] [row,column]
  def get_loc_from_alpha_loc(alpha_loc)
    row = ALPHA26.find_index(alpha_loc[0,1])
    col = alpha_loc[1...].to_i - 1
    return [row,col]
  end

  #Gets the location string of a sample in a collection 
  #Returns Alpha numerical string eg A1 or if the sample is
  #in multiple locations will return A1, A2, A3
  #
  #@collection Collection the collection that the sample is in
  #@sample Sample the Sample that you want the Alpha Numerical location for
  def get_alpha_num_location(collection, sample)
    loc_array = get_item_sample_location(collection, sample)
    string = ""
    loc_array.each_with_index do |loc, idx|
      string = string + ", " if idx > 0
      loc.each_with_index do |rc, idx|
        if idx.even?
          string = string + ALPHA26[rc]
        else
          string = string + "#{rc+1}"
        end
      end
    end
    return string
  end


  #Finds the location of what ever is give either item or sample
  #
  # @collection collection the collection containing the thing
  # @part item,part, or sample that is to be found
  # returns
  # @Array[array[r,c]] sometimes samples are in multiple places so array of array
  def get_item_sample_location(collection, part)
    location_array = collection.find(part)
    return location_array
  end


  #Assigns samples to specific well locations
  #
  #input:  working_plate   Collection
  def add_fv_array_samples_to_collection(input_array, working_plate)
      sample_array = []
      input_array = input_array.sort_by{|fv| [fv.collection.find(fv.sample).first[1],fv.collection.find(fv.sample).first[0]]}
      input_array.each_with_index do |fv, idx|
        sample = fv.sample
        sample_array << sample
      end
      slots_left = working_plate.get_empty.length
      raise "There are too many samples in this batch." if sample_array.length > slots_left
      working_plate.add_samples(sample_array) #TODO add error checking for if the working_plate is full
  end


  #This replaces the operations.make command.  It ensures that all items in output_fv_array
  #Remain in the same collection (instead of being put into different collections)
  #
  # @output_fv_array array[fv] array of field values
  # @working_plate collection the destination collection.
  def make_output_plate(output_fv_array, working_plate)
    output_fv_array.each do |fv|
        r_c = working_plate.find(fv.sample).first
        fv.set(collection: working_plate, row: r_c[0], column: r_c[1])
      end
  end

  #This finds a sample from an alpha numberical string location(e.g. A1, B1)
  #
  # @collection collection a collection that the part is located in
  # @loc string  the location in the collection for part (A1, B3, C7)
  # Returns:
  # @part item the item at that location
  def part_alpha_num(collection, loc)
    array_loc = get_loc_from_alpha_loc(loc)
    row = array_loc[0]
    col = array_loc[1]

    dem = collection.dimensions 
    raise "Location outside collection dimensions" if row > dem[0] || col > dem[1]
    part = collection.part(row,col)
    return part
  end

end

sample_types:
  - {name: RNA Sample, description: An individual unique sample of RNA}
    - {name: Customer, ftype: string}
    - {name: Code, ftype: string, required: true}
    - {name: Version, ftype: string}
    - {name: Type, ftype: string}
    - {name: Label, ftype: string}
    - {name: Organism, ftype: string}
    - {name: Conc, ftype: string}
    - {name: Volume, ftype: string}
    - {name: Pool, ftype: string}
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object_types:
  - {name: 96 Well Sample Plate, description: 96 well sample plate, handler: collection, unit: plate, release_method: return, rows: 8, columns: 12}
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operation_type: Normalization Pooling
category: RNA_Seq
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Input Array, sample_types: [RNA Sample], object_types: [96 Well Sample Plate], array: true, routing: IA}
  - {ftype: sample, role: output, name: Output Array, sample_types: [RNA Sample], object_types: [96 Well Sample Plate], array: true, routing: IA}
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protocol:
#Cannon Mallory
#UW-BIOFAB
#03/04/2019
#malloc3@uw.edu
#
#
#This protocol is for total RNA QC.  It Will take in a batch of samples, replate these
#samples together onto a 96 well plate that will then go through a QC protocols including
#getting the concentrations of the original sampole.  These concentrations will then be associated
#with the original sample for use later.


#Currently build plate needs a bit of work.  It works by order of input array and not by order of sample location on plate


needs "Standard Libs/Debug"
needs "Standard Libs/CommonInputOutputNames"
needs "Standard Libs/Units"

needs "Collection_Management/CollectionDisplay"
needs "Collection_Management/CollectionTransfer"
needs "Collection_Management/CollectionActions"
needs "Collection_Management/SampleManagement"
needs "RNA_Seq/WorkflowValidation"
needs "RNA_Seq/KeywordLib"

class Protocol
  include Debug, CollectionDisplay, CollectionTransfer, SampleManagement, CollectionActions
  include WorkflowValidation, CommonInputOutputNames, KeywordLib
  C_TYPE = "96 Well Sample Plate"

  TRANSFER_VOL = 20   #volume of sample to be transfered in ul


  def main

    validate_inputs(operations, inputs_match_outputs = true)

    validate_cdna_qc(operations)

    multi_plate = multi_input_plates?(operations)

    working_plate = make_new_plate(C_TYPE, multi_plate)
  
    operations.retrieve

    operations.each do |op|
      input_fv_array = op.input_array(INPUT_ARRAY)
      output_fv_array = op.output_array(OUTPUT_ARRAY)
      add_fv_array_samples_to_collection(input_fv_array, working_plate)
      make_output_plate(output_fv_array, working_plate)
      transfer_from_array_collections(input_fv_array, working_plate, TRANSFER_VOL) if multi_plate
    end

    if !multi_plate
      input_plate = operations.first.input_array(INPUT_ARRAY).first.collection
      relabel_plate(input_plate,working_plate) if !multi_plate
      input_plate.mark_as_deleted
    else
      trash_object(get_array_of_collections(operations, 'input')) if multi_plate
    end

    normalization_pooling(working_plate)

    store_output_collections(operations, 'Freezer')
  end

  #Instructions for performing RNA_PREP
  #
  # @working_plate collection the plate that has all samples in it
  def normalization_pooling(working_plate)
    show do
      title "Do the Normalization Pooling Steps"
      note "Run typical Normalization Pooling protocol with plate #{working_plate.id}"
      table highlight_non_empty(working_plate, check: false)
    end
  end
end

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object_types:
  - {name: Total RNA 96 Well Plate, description: 96 Well plate of total RNA from customer, handler: collection, unit: plate, release_method: return, prefix: M80C, rows: 8, columns: 12, sample_type_name: RNA Sample}
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operation_type: RNA Prep
category: RNA_Seq
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Input Array, sample_types: [RNA Sample], object_types: [Total RNA 96 Well Plate], array: true, routing: R}
  - {ftype: sample, role: output, name: Output Array, sample_types: [RNA Sample], object_types: [96 Well Sample Plate], array: true, routing: R}
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precondition:
def precondition(_op)
  true
  #_op = Operation.find(_op)
  #_op.associate("Run_Pre".to_sym, "Ayy the preconditions ran")
end

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protocol:
#Cannon Mallory
#UW-BIOFAB
#03/04/2019
#malloc3@uw.edu
#
#
#This protocol is for total RNA QC.  It Will take in a batch of samples, replate these
#samples together onto a 96 well plate that will then go through a QC protocols including
#getting the concentrations of the original sampole.  These concentrations will then be associated
#with the original sample for use later.


#Currently build plate needs a bit of work.  It works by order of input array and not by order of sample location on plate


needs "Standard Libs/Debug"
needs "Standard Libs/CommonInputOutputNames"
needs "Standard Libs/Units"
needs "Standard Libs/UploadHelper"

needs "Collection_Management/CollectionDisplay"
needs "Collection_Management/CollectionTransfer"
needs "Collection_Management/CollectionActions"
needs "Collection_Management/SampleManagement"
needs "RNA_Seq/WorkflowValidation"
needs "RNA_Seq/KeywordLib"
needs "RNA_Seq/CsvDebugLib"

require 'csv'

class Protocol
  include Debug, CollectionDisplay, CollectionTransfer, SampleManagement
  include WorkflowValidation, CommonInputOutputNames, KeywordLib, CsvDebugLib
  include CollectionActions, UploadHelper


  PLATE_ID = "Plate ID"
  WELL_LOCATION = "Well Location"
  ADAPTER_TRANSFER_VOL = 12 #volume of adapter to transfer
  TRANSFER_VOL = 20   #volume of sample to be transfered in ul
  CONC_RANGE = (0...100)
  CSV_HEADERS = ["Plate ID", "Well Location"]
  CSV_LOCATION = "Location TBD"


  def main

    validate_inputs(operations, inputs_match_outputs = true)

    validate_concentrations(operations, CONC_RANGE)

    working_plate = make_new_plate(C_TYPE)

    operations.retrieve

    operations.each do |op|
      input_fv_array = op.input_array(INPUT_ARRAY)
      output_fv_array = op.output_array(OUTPUT_ARRAY)
      add_fv_array_samples_to_collection(input_fv_array, working_plate)
      make_output_plate(output_fv_array, working_plate)
      transfer_from_array_collections(input_fv_array, working_plate, TRANSFER_VOL)
    end

    adapter_plate = make_adapter_plate(working_plate.parts.length)

    associate_plate_to_plate(working_plate, adapter_plate, ADAPTER_PLATE, ADAPTER)

    store_input_collections(operations)
    rna_prep_steps(working_plate)
    store_output_collections(operations, 'Freezer')
  end

  #Instructions for performing RNA_PREP
  #
  # @working_plate collection the plate that has all samples in it
  def rna_prep_steps(working_plate)
    show do
      title "Run RNA-Prep"
      note "Run typical RNA-Prep Protocol with plate #{working_plate.id}"
      table highlight_non_empty(working_plate, check: false)
    end
  end


  #Instructions for making an adapter plate
  #
  #returns:
  # @adapter_plate collection the adapter plate
  def make_adapter_plate(num_adapters_needed)
    adapter_plate = make_new_plate(C_TYPE)

    show do
      title "Upload CSV"
      note "On the next page upload CSV of desired Adapters"
    end

    up_csv = get_validated_uploads(num_adapters_needed, CSV_HEADERS, false, file_location: CSV_LOCATION)
    col_parts_hash = sample_from_csv(up_csv)
    col_parts_hash.each do |collection_item, parts|
      collection = Collection.find(collection_item.id)
      adapter_plate.add_samples(parts)
      transfer_to_working_plate(collection, adapter_plate, arry_sample = parts, ADAPTER_TRANSFER_VOL)
    end
    return adapter_plate
  end

  #Parses CSV and returns an array of all the samples required
  #@ CSV  CSV a csv file of thee adapter plate wells
  #
  #returns hash[key: collection, array[parts]]
  def sample_from_csv(csv_uploads)
    parts = []
    csv = CSV.parse(csv_upload) if debug
    csv_uploads.each do |upload|
      csv = CSV.read(open(upload.url))

      first_row = csv.first
      #Should remove leading blank space from CSV
      first_row[0][0] = ''

      id_idx = first_row.find_index(CSV_HEADERS[0])
      loc_idx = first_row.find_index(CSV_HEADERS[1])
      csv.drop(1).each_with_index do |row, idx|
        collection = Collection.find(row[id_idx])
        part = part_alpha_num(collection, row[loc_idx])
        parts.push(part)
      end
    end
    return parts.group_by{|part| part.containing_collection}
  end
end

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operation_type: RNA QC
category: RNA_Seq
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Input Array, sample_types: [RNA Sample], object_types: [Total RNA 96 Well Plate], array: true, routing: IS}
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protocol:
#Cannon Mallory
#UW-BIOFAB
#03/04/2019
#malloc3@uw.edu
#
#
#This protocol is for total RNA QC.  It Will take in a batch of samples, replate these
#samples together onto a 96 well plate that will then go through a QC protocols including
#getting the concentrations of the original sampole.  These concentrations will then be associated
#with the original sample for use later.


#Currently build plate needs a bit of work.  It works by order of input array and not by order of sample location on plate


needs "Standard Libs/Debug"
needs "Standard Libs/CommonInputOutputNames"
needs "Standard Libs/Units"
needs "Standard Libs/UploadHelper"
needs "Collection_Management/CollectionDisplay"
needs "Collection_Management/CollectionTransfer"
needs "Collection_Management/CollectionActions"
needs "Collection_Management/SampleManagement"
needs "RNA_Seq/WorkflowValidation"
needs "RNA_Seq/KeywordLib"

require 'csv'

class Protocol
  include Debug, CollectionDisplay, CollectionTransfer, SampleManagement
  include CollectionActions, WorkflowValidation, CommonInputOutputNames
  include KeywordLib, UploadHelper

  TRANSFER_VOL = 20   #volume of sample to be transfered in ul
  CSV_HEADERS = ["Well Position", "Conc(ng/ul)"]
  CSV_LOCATION = "TBD Location of file"

  def main

    validate_inputs(operations)
    
    working_plate = make_new_plate(C_TYPE)
    
    operations.retrieve

    operations.each do |op|
      input_fv_array = op.input_array(INPUT_ARRAY)
      add_fv_array_samples_to_collection(input_fv_array, working_plate)
      transfer_from_array_collections(input_fv_array, working_plate, TRANSFER_VOL)
    end
    
    store_input_collections(operations)
    take_qc_measurments(working_plate)
    list_concentrations(working_plate)
    trash_object(working_plate)
  end


  


  # Instruction on taking the QC measurements themselves.
  # Currently not operational but associates random concentrations for testing
  #
  #@param working_plate collection the plate being used
  def take_qc_measurments(working_plate)
    show do
      title "Load Plate #{working_plate.id} on Plate Reader"
      note "Load plate on plate reader and take concentration measurements"
      note "Save output data as CSV and upload on next page"
    end

    csv_uploads = get_validated_uploads(working_plate.parts.length, 
        CSV_HEADERS, false, file_location: CSV_LOCATION)

    upload = csv_uploads.first
    csv = CSV.read(open(upload.url))
    conc_idx = csv.first.find_index(CSV_HEADERS[1])
    loc_idx = csv.first.find_index(CSV_HEADERS[0])
    csv.drop(1).each_with_index do |row, idx|
      alpha_loc = row[loc_idx]
      conc = row[conc_idx].to_i
      part = part_alpha_num(working_plate, alpha_loc)
      if !part.nil?
        part.associate(CON_KEY, conc)
        samp = part.sample
        operations.each do |op|
          op.input_array(INPUT_ARRAY).each do |fv|
            if samp == fv.sample
              fv.part.associate(CON_KEY, conc)
            end
          end
        end
      end
    end
  end


  #Lists the measured concentrations.
  #TODO write highlight heat map method for table
  #
  #@param working_plate collection the plate being used
  def list_concentrations(working_plate)
    rcx_array = []
    parts = working_plate.parts
    parts.each do |part|
      loc_array = working_plate.find(part)
      loc_array.each do |loc|
        loc.push(part.get(CON_KEY))
        rcx_array.push(loc)
      end
    end
    show do
      title "Measurements Take"
      note "Recorded Concentrations are listed below"
      table highlight_rcx(working_plate, rcx_array, check: false)
    end
  end
end

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operation_type: cDNA QC
category: RNA_Seq
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Input Array, sample_types: [RNA Sample], object_types: [96 Well Sample Plate], array: true, routing: IA}
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protocol:
#Cannon Mallory
#UW-BIOFAB
#03/04/2019
#malloc3@uw.edu
#
#
#This Protocol is to Quality check the C-DNA created.

needs "Standard Libs/Debug"
needs "Standard Libs/CommonInputOutputNames"
needs "Standard Libs/Units"

needs "Collection_Management/CollectionDisplay"
needs "Collection_Management/CollectionTransfer"
needs "Collection_Management/CollectionActions"
needs "Collection_Management/SampleManagement"
needs "RNA_Seq/WorkflowValidation"
needs "RNA_Seq/KeywordLib"


class Protocol
  include Debug, CollectionDisplay, CollectionTransfer, SampleManagement
  include CollectionActions, WorkflowValidation, CommonInputOutputNames, KeywordLib

  TRANSFER_VOL = 20   #volume of sample to be transfered in ul


  def main
    validate_inputs(operations)
    
    working_plate = make_new_plate(C_TYPE)
    
    operations.retrieve

    operations.each do |op|
      input_fv_array = op.input_array(INPUT_ARRAY)
      add_fv_array_samples_to_collection(input_fv_array, working_plate)
      transfer_from_array_collections(input_fv_array, working_plate, TRANSFER_VOL)
    end
    
    store_input_collections(operations)
    take_qc_measurments(working_plate)
    trash_object(working_plate)

  end


  # Instruction on taking the QC measurements themselves.
  # Currently not operational but associates random concentrations for testing
  #
  #TODO complete this and make it actually look at CSV Files
  def take_qc_measurments(working_plate)
    input_rcx = []
    operations.each do |op|
      input_array = op.input_array(INPUT_ARRAY)
      input_items = input_array.map{|fv| fv.item}
      arry_sample = input_array.map{|fv| fv.sample}
      input_items.each_with_index do |item, idx|
        item.associate(QC2_KEY, "Pass")
        sample = arry_sample[idx]
        working_plate_loc_array = working_plate.find(sample)
        working_plate_loc_array.each do |sub_array|
          sub_array.push("#{item.get(QC2_KEY)}")
          input_rcx.push(sub_array)
        end
      end
    end

    show do
      title "Perform QC Measurements"
      note "Please Attach excel files"
      note "For testing purposes each sample will assume to pass"
      note "This will eventually come from a CSV file"
      table highlight_rcx(working_plate, input_rcx, check: false)
    end
  end
end

library: {name: CsvDebugLib, category: RNA_Seq}
code_source:
module CsvDebugLib
    CSV_DEBUG = "Plate ID,Well Location
    100,A1
    100,B1
    100,C1
    100,D1
    100,E1
    100,F1
    100,G1
    100,A2
    100,B2
    100,C2
    100,D2
    100,E2
    100,F2
    100,G2
    100,A3
    100,B3
    100,C3
    100,D3
    100,E3
    100,F3
    100,G3"

    CSV_CONC = "Plate Position, Well Position, Conc (ng/ul)
    A01,A1,58
    B01,B1,55
    C01,C1,60
    D01,D1,67
    E01,E1,66
    F01,F1,88
    G01,G1,98
    A02,A2,74
    B02,B2,92
    C02,C2,57
    D02,D2,58
    E02,E2,99
    F02,F2,56
    G02,G2,58
    A03,A3,66
    B03,B3,57
    C03,C3,66
    D03,D3,99
    E03,E3,87
    F03,F3,78
    G03,G3,56"
end

library: {name: KeywordLib, category: RNA_Seq}
code_source:
#Cannon Mallory
#malloc3@uw.edu
#
#This is where all the standard keywords/values will live.

module KeywordLib
    MAX_INPUTS = 96
    C_TYPE = "96 Well Sample Plate"
    CON_KEY = "Stock Conc(ng/ul)"
    QC2_KEY = "cDNA QC"
    

    ADAPTER_PLATE = "Adapter Plate"
    ADAPTER = "Adapter Item"

    INPUT_PLATE = "Input Plate"
    INPUT_ITEM = "Input Item"

end

library: {name: WorkflowValidation, category: RNA_Seq}
code_source:
#Cannon Mallory
#malloc3@uw.edu
#
#This includes all moduels that validate workflow parameters at run time
needs "Standard Libs/CommonInputOutputNames"
needs "RNA_Seq/KeywordLib"

module WorkflowValidation
  include CommonInputOutputNames, KeywordLib

  
  
  #Validates that total inputs (from all operations)
  #Ensures that all inputs doesnt exeed max inputs
  #
  # @operations OperationList list of all operations in the job
  # @inputs_match_outputs Boolean if the number of inputs should match the number of outputs set as true
  def validate_inputs(operations, inputs_match_outputs = false)
    total_inputs = []
    total_outputs = []
    operations.each do |op|
      total_inputs = total_inputs + op.input_array(INPUT_ARRAY).map!{|fv| fv.sample}
      total_outputs = total_outputs + op.output_array(OUTPUT_ARRAY).map!{|fv| fv.sample}
    end

    a = total_inputs.detect{ |sample| total_inputs.count(sample) > 1}
    raise "Sample #{a.id} has been included multiple times in this job" if a != nil
    raise "The number of Input Samples and Output 
            Samples do not match" if total_inputs.length != total_outputs.length && inputs_match_outputs
    raise "Too many samples for this job. Please re-lauch job with fewer samples" if total_inputs.length > MAX_INPUTS
    raise "There are no samples for this job."  if total_inputs.length <= 0
  end


  def validate_concentrations(operations, range)
    operations.each do |op|
      op.input_array(INPUT_ARRAY).each do |fv|
        conc = fv.part.get(CON_KEY)
        raise "Sample #{fv.sample.id} doesn't have a valid concentration for this operation"if !range.cover? conc
      end
    end
  end

  def validate_cdna_qc(operations)
    operations.each do |op|
      op.input_array(INPUT_ARRAY).each do |fv|
        qc = fv.item.get(QC2_KEY)
        raise "Item #{fv.item.id} doesn't have a valid C-DNA QC" if qc != "Pass"
      end
    end
  end
  
  
end

library: {name: AssociationManagement, category: Standard Libs}
code_source:
# frozen_string_literal: true

# Module with methods and classes that seek to help with associating data
# to, and retrieving data from, items, operations, plans, collections, and parts.
#
module AssociationManagement
  require 'matrix'

  # Associates a key and value to the associations hash of the given object.
  # Replaces an existing association for the given key.
  #
  # A part may be represented as a part item, or a collection and coordinate.
  #
  # @param object [DataAssociator]  the object to associate data
  # @param key [String]  the key for the association
  # @param data [serializable object]  the data for the association
  # @param opts [Hash]  additional method options
  # @option coord [Array]  row, column pair if the object is a collection
  # @option data_matrix [String]  optional data matrix for a collection
  def associate_data(object, key, data, opts = {})
    AssociationMap.associate_data(object, key, data, opts)
  end

  # Returns the associated value from the associations hash of a given object.
  # If an association doesn't exist for the key, returns nil.
  #
  # @param object [DataAssociator]  the object to associated data
  # @param key [String]  the key for the association
  # @param opts [Hash]  additional method options
  # @option coord [tuple Array]  row, column of part if object is a collection.
  # @option data_matrix [String]  optional data matrix
  # @return [serializable object]  the value associated with the given key
  def get_associated_data(object, key, opts = {})
    AssociationMap.get_associated_data(object, key, opts)
  end

  # Defines a map to manage the associations for an {Item}, {Operation}, or
  # {Plan} object, which are Aquarium classes that extend {DataAssociator}.
  #
  # Note: if `map` contains associations, it is necessary to call `map.save` for
  #       the associations to be saved to Aquarium.
  #
  class AssociationMap
    DATAMATRIX_KEY = 'part_data'

    # Initializes an {AssociationMap} for the given item, operation, or plan.
    #
    # @param object [DataAssociator]  the object to which to associated data
    def initialize(object)
      @object = object
      @map = {}

      @object.associations.each do |datum|
        @map[datum[0]] =
          if @object.upload(datum[0]).nil?
            datum[1]
          else
            UploadAssoc.new(datum[1], @object.upload(datum[0]))
          end
      end

      if object.is_a? Collection
        initialize_part_data
        data_matrix_all(@object, @map[DATAMATRIX_KEY])
      end
    end

    # Retrieves part_data from the data associations of constituent parts.
    # achieves forward compatibility with AQ Part update
    def data_matrix_all(coll, data_matrix)
      pas = coll.part_associations
      part_ids = pas.collect(&:part_id)
      das = DataAssociation.where(parent_class: 'Item', parent_id: part_ids)
      pas.each do |pa|
        data_matrix[pa.row][pa.column] = {}
        das.select { |da| da.parent_id == pa.part_id }.each do |da|
          data_matrix[pa.row][pa.column][da.key] = da.value
        end
      end
      data_matrix
    end

    # All in one static method which associates a key and value
    # to the associations hash of a given object. If an association already
    # exists at the given key, it will be replaced. Can associate to parts of collection either
    # using a part field value, or an optional coordinate specification with a collection
    #
    # @param object [DataAssociator]  the object to which data is to be associated. Can be an io field value
    # @param key [String]  the key for the association
    # @param data [serializable object]  the data for the association
    # @param opts [Hash]  additional method options
    # @option coord [tuple Array]  specify r, c index of the data matrix of the object to upload to,
    #                   rather than directly to the object. Requires that object is a collection.
    # @option data_matrix [String]  optionally, when associating to a part of a collection, use a
    #                         data matrix besides the default one
    def self.associate_data(object, key, data, opts = {})
      defaults = { data_matrix: DATAMATRIX_KEY }
      opts.merge defaults
      raise 'Bad Arguments: cannot associate to a part and specify coords at the same time' if object.is_a?(FieldValue) && opts[:coord]
      if object.is_a?(FieldValue)
        assoc_map = AssociationMap.new(object.collection)
        assoc_map.putrc(object.row, object.column, key, data)
      elsif opts[:coord]
        assoc_map = AssociationMap.new(object)
        assoc_map.putrc(opts[:coord][0], opts[:coord][1], key, data)
      else # Normal case that deals directly with object
        assoc_map = AssociationMap.new(object)
        assoc_map.put(key, data)
      end
      assoc_map.save
    end

    # All in one static method which gets an associated value
    # from the associations hash of a given object. If an association doesn't
    # exist at the given key, returns nil. Can get associations from parts of collection either
    # using a part field value, or an optional coordinate specification with a collection
    #
    # @param object [DataAssociator]  the object to which data is to be associated, can be an io field value
    # @param key [String]  the key for the association
    # @param opts [Hash]  additional method options
    # @option coord [tuple Array]  specify r, c index of the data matrix of the object to upload to,
    #                   rather than directly to the object. Requires that object is a collection.
    # @option data_matrix [String]  optionally, when retrieving association from a part of a collection,
    #                         use a matrix besides the default one
    # @return [serializable object]  the data stored in the associations of the given object at the given key
    def self.get_associated_data(object, key, opts = {})
      defaults = { data_matrix: DATAMATRIX_KEY }
      opts.merge defaults
      raise 'Bad Arguments: cannot get data from a part and specify coords at the same time' if object.is_a?(FieldValue) && opts[:coord]
      if object.is_a?(FieldValue)
        assoc_map = AssociationMap.new(object.collection)
        return assoc_map.getrc(object.row, object.column, key)
      elsif opts[:coord]
        assoc_map = AssociationMap.new(object)
        return assoc_map.getrc(opts[:coord][0], opts[:coord][1], key)
      else # Normal case that deals directly with object
        assoc_map = AssociationMap.new(object)
        return assoc_map.get(key)
      end
    end

    # Adds an association for the data with the key.
    # The data must be serializable.
    #
    # @param key [String]  the key for the association
    # @param data [serializable object]  the data for the association
    # @param opts [Hash]  Additional Options
    # @option tag  [String]  If putting an Upload, optionally specify an extra label
    def put(key, data, opts = { tag: {} })
      @map[key] = if data.is_a?(Upload)
                    UploadAssoc.new(opts[:tag], data)
                  else
                    data
                  end
    end

    # Adds an association for the data with the key, for
    # a specific row, column coordinate within a collection
    # If the data_matrix for the collection has not been created yet, it is initialized
    #
    # @requires  current object is a Collection, and r,c corresponds to a valid location in the object
    # @param r [Integer]  the row of the part within the collection to associate to
    # @param c [Integer]  the column of the part within the collection to associate to
    # @param key [String]  the key for the association
    # @param data [serializable object]  the data for the association
    # @param data_matrix [String/Symbol]  optionally specify a data matrix to access besides the default one,
    #                         for example, you might have the default part data, alongside a routing matrix
    def putrc(row, column, key, data, data_matrix = DATAMATRIX_KEY)
      # if the data_matrix for this collection does not exist yet, initialize it.
      initialize_part_data(data_matrix)
      @map[data_matrix][row][column][key] = data
    end

    # To be called when the object of association is a collection,
    # establishes a matrix parallel to the sample matrix which can
    # be used to store additional information about individual parts
    # Each slot in the matrix will be a new empty hash.
    #
    # @param coll [Collection]  the object for which part-data matrix will be initialized
    # @param data_matrix [String/Symbol]  optionally specify a data matrix to access besides the default one,
    #                         for example, you might have the default part data, alongside a routing matrix
    def initialize_part_data(data_matrix = DATAMATRIX_KEY)
      raise "Invalid Method Call: cannot associate part data to an object that isn't a collection" unless @object.is_a?(Collection)
      # TODO: fix the following so that can use the Base method
      # coll = collection_from(@object.id)
      coll = Collection.find(@object.id)
      @map[data_matrix] = Array.new(coll.dimensions[0]) { Array.new(coll.dimensions[1]) { {} } } if @map[data_matrix].nil?
    end

    # Returns the associated data for the key, if any.
    #
    # @param key [String]  the key for the association
    # @returns the data object for the key, `nil` otherwise
    def get(key)
      data = @map[key]
      if data.is_a?(UploadAssoc)
        data.upload
      else
        data
      end
    end

    # Gets an association for the data with the key, for
    # a specific row, column coordinate within a collection
    # Returns the associated data for the key, if any.
    #
    # @requires  current object is a Collection, and r,c corresponds to a valid location in the object
    # @param r [Integer]  the row of the part within the collection to associate to
    # @param c [Integer]  the column of the part within the collection to associate to
    # @param key [String]  the key for the association
    # @param data_matrix [String/Symbol]  optionally specify a data matrix to access besides the default one,
    #                         for example, you might have the default part data, alongside a routing matrix
    # @returns the data object for the key, `nil` otherwise
    def getrc(row, column, key, data_matrix = DATAMATRIX_KEY)
      @map[data_matrix][row][column][key] unless @map[data_matrix].nil?
    end

    # Retrieve the associations for all parts of the collection
    # as a matrix.
    # @requires  current object is a collection
    # @param data_matrix [String/Symbol]  optionally specify a data matrix to access besides the default one,
    #                         for example, you might have the default part data, alongside a routing matrix
    # @returns  the data matrix, if one exists
    def get_data_matrix(data_matrix = DATAMATRIX_KEY)
      Matrix.rows(@map[data_matrix])
    end

    # Replace or initialize the data matrix for this object
    # with a custom one.
    # @requires  the current object is a collection
    # `matrix` have the same row column dimensions as the collection
    #
    # @param new_matrix [Matrix]  the new data matrix
    # @param data_matrix [String/Symbol]  optionally specify a data matrix (by key) to access besides the default one,
    #                         for example, you might have the default part data, alongside a routing matrix

    def set_data_matrix(matrix, data_matrix = DATAMATRIX_KEY)
      @map[data_matrix] = matrix.to_a
    end

    # Saves the associations in this map to Aquarium.
    def save
      das = []
      @map.each_key do |key|
        if key == DATAMATRIX_KEY
          das.concat save_data_matrix_alt(@object, @map[key])
        elsif @map[key].is_a? UploadAssoc
          # TODO: update this to lazy associate once aq is updated to hav lazy upload assoc (on master, just not on server yet)
          @object.associate(key, @map[key].tag, @map[key].upload)
        else
          das << @object.lazy_associate(key, @map[key])
        end
      end
      DataAssociation.import(das, on_duplicate_key_update: [:object]) unless das.empty?
      @object.save
      nil
    end

    # saves part_data to the data associations of constituent parts.
    # achieves forward compatibility with AQ Part update
    # built off of set_data_matrix from collection.rb
    def save_data_matrix_alt(coll, matrix, offset: [0, 0])
      pm = coll.part_matrix
      das = []

      uniq_keys = matrix.flatten.map(&:keys).flatten.uniq
      dms_by_key = {}
      uniq_keys.each do |key|
        dms_by_key[key] = coll.data_matrix(key)
      end

      coll.each_row_col(matrix, offset: offset) do |x, y, ox, oy|
        next unless !matrix[x][y].nil? && pm[ox][oy] # this part has das
        matrix[x][y].each do |k, v|
          if pm[ox][oy]
            if dms_by_key[k][ox][oy]
              da = dms_by_key[k][ox][oy]
              da.object = { k => v }.to_json
              das << da
            else
              das << pm[ox][oy].lazy_associate(k, v)
            end
          end
        end
      end

      das
    end

    # Returns an array of all the keys in this map
    def keys
      @map.keys
    end

    # Returns the string representation of the map
    def to_string
      @map.to_s
    end

    alias to_s to_string
  end

  # private class that is used to deal with associating upload objects alongside their tag
  class UploadAssoc
    def initialize(tag, upload)
      @upload = upload
      @tag = tag || {}
    end

    def change_tag(new_tag)
      @tag = new_tag
    end

    attr_reader :upload

    attr_reader :tag
  end

  # Utilizes the part-data matrix of collections to store information about the history of
  # parts of a collection. PartProvenance initializes and relies on two fields of every part-data
  # slot: `source` and `destination`.
  # `source` will store a list of item ids (with rc index if applicable),
  # of all the ingredients used to make this part, and destination will use the same data format
  # to record all of the places this part was used in.
  # Item-Item provenance can technically be recorded as well with this library, but it will not
  # be necessary.
  #
  module PartProvenance
    SOURCE = 'source'
    DESTINATION = 'destination'

    # Record an entry to the provenance data between two parts, or a part and an item.
    # This will populate the destination field of `from`, and the source field
    # of the `to` in their respective associations. If from_coord or to_coord is specified, then
    # the associations of the part of the from/to collection at that coordinate will
    # populated instead.
    #
    # @param opts [Hash]  Arguments specifying which objects to record relation for
    # @option from [Item/Collection]  the item or collection where sample transfer originated
    # @option to [Item/Collection]  the item or collection for destination of sample transfer
    # @option from_coord [Tuple Array]  optionally, specify the coordinate selecting a part of the collection, if `to` was a collection
    # @option to_coord [Tuple Array]  optionally, specify the coordinate selecting a part of the collection, if `from` was a collection
    # @option additional_relation_data [Hash]  optionally, add additional key/value pairs to add to both object's routing data
    #                         for this relation. For example, you might want to specify the volume of the transfer,
    #                         or which colony was picked from a plate
    # @option from_map [AssociationMap]  existing AssociationMap for the given from-object, required to successfully associate provenance to
    #                           the `from` item
    # @option to_map [AssociationMap]  existing AssociationMap for the given to-object, required to successfully associate provenance to
    #                           the `to` item
    def add_provenance(opts = {})
      if opts[:from] == opts[:to] # special case: provenance between two parts on the same collection
        opts[:from_map] = opts[:to_map] # ensure from map and to map are the same object for this case
      end

      # creating information hashes to represent `from` and `to` relationship data
      from_info = serialize_as_simple_tag(opts[:from], opts[:from_coord], opts[:additional_relation_data])
      to_info = serialize_as_simple_tag(opts[:to], opts[:to_coord], opts[:additional_relation_data])

      # in destination field of `from`, add information tag representing `to`
      append_to_association(opts[:from_map], DESTINATION, to_info, coord: opts[:from_coord]) if opts[:from_map]

      # in source field of `to`, add information tag representing `from`
      append_to_association(opts[:to_map], SOURCE, from_info, coord: opts[:to_coord]) if opts[:to_map]
    end

    # Retrieves a list of sources that were used to construct the given part
    # of a Collection
    #
    # @param object [FieldValue/Collection]  the part of interest, or the collection which
    #                 contains the part of interest. For the second case, coord must also be specified
    # @param coord [Tuple Array]  the r,c index of the target part
    def sources(object, coord = nil)
      if coord
        AssociationMap.get_associated_data(object, SOURCE, coord: coord)
      else
        AssociationMap.get_associated_data(object, SOURCE)
      end
    end

    # Retrieves a list of destinations that were made using the given part
    # of a Collection
    #
    # @param object [FieldValue/Collection]  the part of interest, or the collection which
    #                 contains the part of interest. For the second case, coord must also be specified
    # @param coord [Tuple Array]  the r,c index of the target part
    def destinations(object, coord = nil)
      if coord
        AssociationMap.get_associated_data(object, DESTINATION, coord: opts[:coord])
      else
        AssociationMap.get_associated_data(object, DESTINATION)
      end
    end

    # For the given associatable target object, appends or concatenates the given datum_to_append to the association
    # at `key` for that object
    #
    # @param association_map [AssocioationMap]  an AssociationMap that will have its associations appended to.
    # @param key [String/Symbol]  The association key which maps to an appendable object
    # @param datum_to_append [Serializable Object]  the element to append to the list at the value for the given key
    # @param opts [Hash]  additional options
    # @option coord [Tuple array]  coordinate of target part, if association target is a collection
    def append_to_association(association_map, key, datum_to_append, opts = {})
      if opts[:coord] # we will be interacting with the associations of a part of a collection if coord is specified
        association_map.putrc(opts[:coord][0], opts[:coord][1], key, []) if association_map.getrc(opts[:coord][0], opts[:coord][1], key).nil?
        association_map.getrc(opts[:coord][0], opts[:coord][1], key) <<  datum_to_append
      else
        association_map.put(key, []) if association_map.get(key).nil?
        association_map.get(key) << datum_to_append
      end
    end

    # Given an item, or a part of a collection, serializes it into a simple tag which can be used to retrieve it.
    #
    # @param item [Item/FieldValue]  can be either an Item, or
    #                         an i/o object corresponding to a part of a collection, which can be thought of
    #                         as constituting a 'sub item'
    def serialize_as_simple_tag(item, coord, additional_info)
      info = if item.collection? && coord
               { id: item.id, row: coord[0], column: coord[1] }
             elsif (item.is_a? Item) || (item.is_a? Collection)
               { id: item.id }
             else
               raise 'Argument is neither a part nor an item'
             end
      info.merge!(additional_info) unless additional_info.nil?
      info
    end
  end
end

library: {name: CommonInputOutputNames, category: Standard Libs}
code_source:
module CommonInputOutputNames

    INPUT_YEAST = 'Yeast Culture'
    OUTPUT_YEAST = 'Yeast Culture'
    MEDIA = 'Media'
    DNA = 'DNA'
    
    INPUT_SAMPLE = 'Input Sample'
    OUTPUT_SAMPLE = 'Output Sample'

    INPUT_ARRAY = "Input Array"
    OUTPUT_ARRAY = "Output Array"

    FORWARD_PRIMER = 'Forward Primer'
    REVERSE_PRIMER = 'Reverse Primer'
    TEMPLATE = 'Template'
    FRAGMENT = 'Fragment'
    PROGRAM = 'Program'
    PRIMER_PLATE = '96-Well Primer Aliquot Plate'

end

library: {name: Debug, category: Standard Libs}
code_source:
module Debug
  def print_object obj
    if [Numeric, String].any? { |c| obj.is_a? c }
      obj
    elsif [Array].any? { |c| obj.is_a? c }
      obj.map { |item| print_object item }
    elsif [Hash].any? { |c| obj.is_a? c }
      Hash[obj.map { |k, v| [k, print_object(v)] }]
    else
      s = obj ? obj.id.to_s : ""
      s += " #{obj.name}" if obj.class.method_defined? :name
      s
    end
  end

  def log_info *args
    if debug
      show do
        title "Debug slide (#{args.length} #{"arg".pluralize args.length})"

        args.each do |arg|
          note "#{arg.class}: #{print_object arg}"
        end
      end
    end
  end

    def inspect(object, ident=nil)
        show do
            title "<span style=\"background-color:yellow\">INSPECTING #{ident} (#{object.class})</span>"
            if object.kind_of?(Array)
              table object
            else
              note object.to_json
            end
        end
    end
end

library: {name: PlanParams, category: Standard Libs}
code_source:
module PlanParams

  # Gets :options from the plan associations and uses it to override default_plan_params
  #
  # @return [Hash] plan_params
  def update_plan_params(plan_params:, opts:)
    if opts.present?
      opts = JSON.parse(opts, { symbolize_names: true })
      plan_params.update(opts)
    end
    plan_params
  end

  #gets the options on the first operaton of a plan
  def get_opts(operations)
    operations.first.plan.associations[:options]
  end

  #gets the options on a specific operation
  def get_op_opts(op)
    op.plan.associations[:options]
  end

  #sets plan params as a temporary association to the operation under the :plan_params key
  def set_temporary_op_params(op, default_plan_parameters)
      opts = get_op_opts(op)
      op.temporary[:plan_params] = update_plan_params(plan_params: default_plan_params, opts: opts)
  end
 
end

library: {name: Units, category: Standard Libs}
code_source:
module Units
    
    EMPTY = -1
    
    # Volume
    MICROLITERS = 'ul'
    MILLILITERS = 'ml'
    
    # Weight
    NANOGRAMS = 'ng'
    MICROGRAMS = 'g'
    
    # Concentration
    PICOMOLAR = 'pM'
    NANOMOLAR = 'nM'
    MICROMOLAR = 'M'
    MILLIMOLAR = 'mM'
    MOLAR = 'M'
    
    # Temperature
    DEGREES_C = 'C'
    
    # Time
    MINUTES = 'min'
    SECONDS = 'sec'
    HOURS ='hr'
    # Force
    TIMES_G = 'x g'
    
    # R/DNA Length
    BASEPAIRS = 'bp'
    KILOBASEPAIRS = 'kbp'
    MEGABASEPAIRS = 'mbp'
    GIGABASEPAIRS = 'gbp'
    
    # Voltage
    VOLTS = 'V'

    def self.qty_display(qty)
        "#{qty[:qty]} #{qty[:units]}"
    end
    
    def qty_display(qty)
        "#{qty[:qty]} #{qty[:units]}"
    end
    
    def add_qty_display(options)
        new_items = {}
        
        options.each do |key, value|
            key =~ /^(.+_)+([a-z]+)$/
            
            case $2
            when 'microliters'
                units = MICROLITERS
            when 'milliliters'
                units = MILLILITERS
            when 'minutes'
                units = MINUTES
            else
                next
            end
            
            qty = value.to_f
            
            new_items["#{$1}qty".to_sym] = { qty: qty, units: units }
        end
        
        options.update(new_items)
    end
    
    # Return the unit constant for the the unit name if there is one.
    #
    # @param unit_name [String] the name of the unit
    # @returns the value of the constant with the given name
    # @raises BadUnitNameError if the name is not the name of a defined unit
    def self.get_unit(unit_name:)
        self.const_get(unit_name.upcase)
      rescue
        raise BadUnitNameError.new(name: unit_name)
    end
    
    # Exception class for bad unit name arguments to Units::get_unit.
    #
    # @attr_reader [String] name  the bad unit name
    class BadUnitNameError < StandardError
        attr_reader :name
        
        def initialize(msg: "Unknown unit name", name:)
            @name = name
            super(msg)
        end
    end
    
    # Return a key for the measure hash defined on the given object type.
    #
    # The measure hash must be defined in the data proerty of the object type as JSON.
    # For instance
    #
    #   { "measure": { "type": "concentration", "unit": "micromolar" } }
    #
    # The key is constructed as the type name, an underscore, and the unit name.
    #
    # @param object_type [ObjectType] the object type
    # @returns the key for the measure of the the object type if there is one
    # @raises MissingObjectTypeMeasure if the object type has no measure data_object
    def self.get_measure_key(object_type:)
        data_object = object_type.data_object
        raise MissingObjectTypeMeasureError.new(name: object_type.name) if !data_object.key?(:measure)
        
        measure = object_type.data_object[:measure]
        type_name = measure[:type]
        unit_name = measure[:unit]
        "#{type_name}_#{self.get_unit(unit_name: unit_name)}"
    end
    
    # Exception class for an object type with out a measure hash definition.
    #
    # @attr_reader [String] name  the name of the object type where measure has was expected
    class MissingObjectTypeMeasureError < StandardError
        attr_reader :name
        
        def initialize(msg: "ObjectType has no measure in data object", name:)
            @name = name
            super(msg)
        end
    end
   
end

library: {name: UploadHelper, category: Standard Libs}
code_source:
# written by SG
# helper function for uploading files
# note: data associations should be handled externally
module UploadHelper
    
    require 'csv'
    require 'open-uri'
    
    CSV_KEY = "upload_csv"
    
    #------------------------------------------
    # upload files 
    #
    # inputs:
    # dirname - directory where files are located, or full path including filename
    # expUploadNum - expected number of files to upload
    # tries - max. number of attempts to upload expectedNum files 
    #
    # returns: array of Upload items 
    #
    # EXAMPLES of how to associate correctly:     
    # data associations - 1st gel image        
    # up_bef=ups[0]
    # op.plan.associate "gel_image_bef", "combined gel fragment", up_bef  # upload association, link 
    # op.input(INPUT).item.associate "gel_image_bef", up_bef              # regular association
    # op.output(OUTPUT).item.associate "gel_image_bef", up_bef            # regular association 
    #------------------------------------------
    def uploadData(dirname, expUploadNum, tries)

        uploads={}      # holds result of upload block   
        numUploads=0    # number of uploads in current attempt
        attempt=0       # number of upload attempts
            
        # get uploads
        loop do
            #if(numUploads==expUploadNum)  
            #    show {note "Upload complete."}
            #end
            break if ( (attempt>=tries) || (numUploads==expUploadNum) ) # stopping condition
            attempt=attempt+1;
            uploads = show do
                title "Select <b>#{expUploadNum}</b> file(s)"
                note "File(s) location is: #{dirname}"
                if(attempt>1)
                    warning "Number of uploaded files (#{numUploads}) was incorrect, please try again! (Attempt #{attempt} of #{tries})"
                end
                upload var: "files"
            end
            # number of uploads    
            if(!uploads[:files].nil?)
                numUploads=uploads[:files].length
            end
        end
        
        if(numUploads!=expUploadNum)
            show {note "Final number of uploads (#{numUploads}) not equal to expected number #{expUploadNum}! Please check."}
            return nil
        end
        
        # format uploads before returning 
        ups=Array.new # array of upload hashes
        if (!uploads[:files].nil?)
            uploads[:files].each_with_index do |upload_hash, ii|
                up=Upload.find(upload_hash[:id]) 
                ups[ii]=up
            end
        end
        
        # return
        ups
        
    end # def
    
    
    # Opens .csv file upload item using its url and stores it line by line in a matrix
    #
    # @param upload [upload_obj] the file that you wish to read from
    # @return matrix [2D-Array] is the array of arrays of the rows read from file, if csv
    def read_url(upload)
        url = upload.url
        matrix = []
        CSV.new(open(url)).each {|line| matrix.push(line)}
        # open(url).each {|line| matrix.push(line.split(',')}
        return matrix
    end
     
     
     
     
  #Validates upload and ensures that it is correct
  #
  #@ Param: uplaod_array Array array of  uploads
  #@Param: expected_num_inputs int the expected number of inputs
  #@Param: csv_headers array array of expected headers
  #@Returns: pass Boolean pass or fail (true is pass)
  def validate_upload(upload_array, expected_num_inputs, csv_headers, multiple_files = true)
    if upload_array.nil?
      show do
        title "No File Attached"
        warning "No File Was Attached"
      end
      return false
    end
    
    fail_message = ""

    if multiple_files == false
      fail_message += "More than one file was uploaded, " if upload_array.length > 1
      upload = upload_array.first
    end

    csv = CSV.read(open(upload.url))
    fail_message += "CSV length is shorter 
        than expected, " if csv.length-1 < expected_num_inputs

    first_row = csv.first
    #Should remove leading blank space from CSV
    first_row[0][0] = ''

    csv_headers.each do |header|
      fail_message += "<b>#{header} Header</b> either does not exist or 
        is in wrong format, " if !first_row.include?(header)
    end

    if fail_message.length > 0
      show do 
        title "Warning Uploaded CSV does not fit correct format"
        note "#{fail_message}"
      end
      return false
    else
      return true
    end
  end
  
  
  #Needs documentation
  def get_validated_uploads(expected_data_points, headers, multi_files, file_location: "Unknown Location")
    tries = 1
    max_tries = 10
    pass = false
    until pass == true
      csv_uploads = upload_csv(tries, max_tries, file_location: file_location)
      pass = validate_upload(csv_uploads, expected_data_points, headers, multi_files)
      tries += 1
      raise "Too many failed upload attempts" if tries == max_tries && !pass
    end
    return csv_uploads
  end

  #Instructions to upload CSV files of concentrations
  def upload_csv(tries = nil , max_tries = "NA", file_location: "Unknown Location")
    up_csv = show do
      title "Upload CSV (attempts: #{tries}/#{max_tries})"
      note "Please upload a <b>CSV</b> file located at #{file_location}"
      upload var: CSV_KEY.to_sym
    end

    return up_csv.get_response(CSV_KEY.to_sym)
  end
  
end # module

   
